//
// "Personal Photoshop Minion V3"
//Eswar P. R Iyer
// This macro batch processes all the images in a folder and any
// subfolders in that folder. The images must be in JPEG format. NOTE: Disable the Rectangle and CROP command at lines 50 and 51 by putting // before them.
// Do this if your images are either Stitched or not in 1024 resolution.
//Enjoy!
// 

   requires("1.33s"); 
   dir = getDirectory("Choose a Directory ");
   setBatchMode(true);
   count = 0;
   countFiles(dir);
   n = 0;
   processFiles(dir);
   //print(count+" files processed");
   
   function countFiles(dir) {
      list = getFileList(dir);
      for (i=0; i<list.length; i++) {
          if (endsWith(list[i], "/"))
              countFiles(""+dir+list[i]);
          else
              count++;
      }
  }

   function processFiles(dir) {
      list = getFileList(dir);
      for (i=0; i<list.length; i++) {
          if (endsWith(list[i], "/"))
              processFiles(""+dir+list[i]);
          else {
             showProgress(n++, count);
             path = dir+list[i];
             processFile(path);
          }
      }
  }

  function processFile(path) {
       //if (endsWith(path, ".tif")) 
           open(path);
           //run("Install...", "install=[C:\\Program Files (x86)\\ImageJ\\plugins\\Eswar Macros\\BATCH_PROCESS_CLASS IV.txt]");
		   //run("BATCH_PROCESS_CLASS IV");
		   //run("Subtract Background...", "rolling=50 white");
           setThreshold(150, 255);
			run("Convert to Mask");
			//makeRectangle(136, 53, 938, 937);  // Selects only the image in a box without scale bar etc 
			//run("Crop");  // Crops everything else and retains only the image for further processing.
			run("Particle Remover", "size=100-Infinity circularity=0-0.35 show=Masks summarize"); // Runs the particle remover
			close();
			run("Image Inverter");
			 //saveAs(format, dir2+list[i]);
			 //close();
		   save(path);
        
   
	close();

		  close();
      
  }
